WorkflowBuilder(Version=2.9.0)
GroupWorkflow TwoToneExperiment
    IntProperty(Value=-1)
    -> Disable IgnoreElements
    -> BehaviorSubject Trial

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=ITI)
    -> IgnoreElements
    -> BehaviorSubject State

    ExternalizedMapping("Joystick Threshold"(Category="Joystick Parameters"))
    -> GroupWorkflow JoystickResponse => #7
        SubscribeSubject Joystick => #0
        ExternalizedMapping(Value(DisplayName="Joystick Threshold", Category="Joystick Properties"))
        -> FloatProperty(Value=0.012)
        -> BehaviorSubject JoystickThreshold => #3
        #0, #3 -> CombineLatest
        -> GreaterThan
        -> DistinctUntilChanged
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> WorkflowOutput
    ExternalizedMapping(Value(DisplayName=ResponseType, Description="False=Lick True=Joystick", Category="Experiment Control"))
    -> BooleanProperty(Value=true) => #9
    -> Condition => #10
        WorkflowInput Source1
        -> WorkflowOutput
    #7, #10 -> SubscribeWhen => #11
    SubscribeSubject Lick
    -> MemberSelector(Selector=Value) => #13
    #9 -> Condition => #14
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #13, #14 -> SubscribeWhen => #15
    #11, #15 -> Merge
    -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
    -> PublishSubject Threshold

    SubscribeSubject PreviousResponse
    -> DelaySubscription(DueTime=PT0.001S) => #20
    ExternalizedMapping => #21
      RewardTone
      MissTone
      DurationLower
      DurationUpper
      "Go Response Window (s)"
      "NoGo Response Window (s)"
      NoGoSound
      "Pulse Period(ms)"
      "Timeout Duration"(DisplayName="Response Timeout", Category="Timeout Properties")
      "NoGo Threshold"(Category="Joystick Parameters")
      "Pull Timeout"(DisplayName="Pull Timeout", Category="Timeout Properties")
      Value(DisplayName="Percentage Go Trials", Category="Experiment Control")
      QuietPeriodLower
      QuietPeriodUpper
      ExtensionLower
      ExtensionUpper
      TimeToS1Quiet
      SampleRate
      OnRampDuration
      OffRampDuration
      PlateauDuration
      VoltageAmplitude
      Channels
    #20, #21 -> CreateObservable CreateTrial => #22
        ExternalizedMapping(Lower(DisplayName=DurationLower, Category="Trial ITI (sec)"), Upper(DisplayName=DurationUpper, Category="Trial ITI (sec)"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=5, Upper=5)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> AsyncSubject ItiDuration

        SubscribeSubject TrialDistribution
        -> Bonsai.Numerics.Distributions.Sample
        -> Sink
            SubscribeSubject Trial
            -> Add(Operand=IntProperty(Value=1))
            -> Take(Count=1)
            -> MulticastSubject Trial
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI) => #8
        SubscribeSubject ItiDuration
        -> PropertyMapping(DueTime) => #10
        #8, #10 -> Delay(DueTime=PT5S)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse) => #12
        SubscribeSubject PenaltyThreshold => #13
        ExternalizedMapping(Lower(DisplayName=QuietPeriodLower, Category="Trial ITI (sec)"), Upper(DisplayName=QuietPeriodUpper, Category="Trial ITI (sec)"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #18
        ExternalizedMapping(Lower(DisplayName=ExtensionLower, Category="Trial ITI (sec)"), Upper(DisplayName=ExtensionUpper, Category="Trial ITI (sec)"))
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(ItiExtension) => #23
        #13, #18, #23 -> GroupWorkflow DummyInitialValue => #24
            Disable DoubleProperty(Value=0)
            -> Disable First => #1
            -> Disable BooleanProperty(Value=true) => #2
            Disable WorkflowInput Source1 => #3
            -> Disable BooleanProperty(Value=true) => #4
            #2, #4 -> Disable Concat => #5
            Disable ExternalizedMapping(DueTime) => #6
            #5, #6 -> Disable Throttle(DueTime=PT2S) => #7
            #3 -> Disable BooleanProperty(Value=false) => #8
            #1 -> Disable BooleanProperty(Value=false) => #9
            #7, #8, #9 -> Disable Merge
            -> Disable WorkflowOutput

            ExternalizedMapping(DueTime)
            -> Timer(DueTime=PT2S)
            -> BooleanProperty(Value=true) => #14
            WorkflowInput Source1
            -> BooleanProperty(Value=false) => #16
            #14, #16 -> Merge
            -> Take(Count=1) => #18
            ExternalizedMapping(DueTime(DisplayName=ItiExtension))
            -> Timer(DueTime=PT2S)
            -> BooleanProperty(Value=false) => #21
            #18, #21 -> Concat
            -> Repeat
            -> Condition ReadyToGo
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        SubscribeSubject ItiDuration
        -> PropertyMapping(DueTime) => #26
        #24, #26 -> DelaySubscription(DueTime=PT5S) => #27
        #12, #27 -> CombineLatest
        -> Condition ReadyToGo
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        -> Take(Count=1)
        -> MemberSelector(Selector=Item1) => #31
        ExternalizedMapping(Value) => #32
        #31, #32 -> LessThanOrEqual(Operand=IntProperty(Value=100)) => #33
        -> Condition GoTrial => #34
            WorkflowInput Source1
            -> WorkflowOutput
        -> Disable SelectMany
            Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
            -> Bonsai.Numerics.Distributions.Sample
            -> GreaterThan(Operand=IntProperty(Value=0)) => #2
            -> Condition PulseOn
                WorkflowInput Source1
                -> WorkflowOutput
            -> GroupWorkflow
                WorkflowInput Source1
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StartPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> Delay(DueTime=PT0.05S)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=StopPwm, Mask=Digital1)
                -> MulticastSubject Commands
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
                -> Disable RepeatCount(Count=1)
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink) => #5
            #2 -> Condition NoPulse
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #7
            #5, #7 -> Merge
            -> WorkflowOutput
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital0) => #37
        Disable ExternalizedMapping(TimeToS1Stim) => #38
        #37, #38 -> Disable SelectMany StimulusPresentation
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime(DisplayName=TimeToS1Stim)) => #1
            #0, #1 -> Delay(DueTime=PT1S)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital0)
            -> MulticastSubject Commands
            -> WorkflowOutput

            SubscribeSubject Timestamp
            -> GroupWorkflow TimeSinceStart => #8
                WorkflowInput Source1 => #0
                -> Take(Count=1) => #1
                #0, #1 -> CombineLatest
                -> Subtract
                -> WorkflowOutput
            ExternalizedMapping("WaitTime (s)") => #9
            #8, #9 -> Condition WaitTime
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="WaitTime (s)")) => #1
                #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.005))
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> Disable WorkflowOutput
        -> Disable Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Go)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital0) => #42
        ExternalizedMapping("Go Response Window (s)"(Category="Response Window Settings"), DueTime(DisplayName="Pull Timeout")) => #43
        #42, #43 -> SelectMany Move => #44
            SubscribeSubject PullThreshold
            -> IntProperty(Value=0)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
            ExternalizedMapping(DueTime) => #3
            #2, #3 -> Delay(DueTime=PT0S) => #4
            SubscribeSubject Threshold
            -> IntProperty(Value=1) => #6
            #6, #2 -> TakeUntil => #7
            ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
            -> Timer(DueTime=PT1S)
            -> IntProperty(Value=2) => #10
            #10, #2 -> TakeUntil => #11
            #4, #7, #11 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition Hit => #45
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        ExternalizedMapping("Pulse Period(ms)"(Category="Solenoid Properties")) => #46
        #45, #46 -> GroupWorkflow A => #47
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
            #0, #1 -> IntProperty(Value=80)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
            -> MulticastSubject Commands
            -> WorkflowOutput
        ExternalizedMapping(SoundIndex(DisplayName=RewardTone, Category="Tone Properties")) => #48
        #47, #48 -> Disable IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
        -> TrialResponse(Response=Hit)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit) => #51
        #44 -> Condition Miss
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> TrialResponse(Response=Miss)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss) => #54
        #51, #54 -> Merge
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=ITI2) => #56
        ExternalizedMapping => #57
          SampleRate(Category="Ramp Properties")
          OnRampDuration(Category="Ramp Properties")
          OffRampDuration(Category="Ramp Properties")
          PlateauDuration(Category="Ramp Properties")
          VoltageAmplitude(Category="Ramp Properties")
          Channels(Category="Ramp Properties")
          StimQuietPeriodLower(Category="S1 Stim Properties")
          StimQuietPeriodUpper(Category="S1 Stim Properties")
          StimExtensionLower(Category="S1 Stim Properties")
          StimExtensionUpper(Category="S1 Stim Properties")
          TimeToS1Quiet(Category="S1 Stim Properties")
          TimeToS1Cutoff(Category="S1 Stim Properties")
        #34, #57 -> SelectMany StimWithRamp => #58
            ExternalizedMapping(SampleRate, OnRampDuration, OffRampDuration, PlateauDuration, VoltageAmplitude, Channels)
            -> Disable IncludeWorkflow(Path=Extensions\VoltageRamp.bonsai, SampleRate=20000, OnRampDuration=0.3, OffRampDuration=0.3, PlateauDuration=10, VoltageAmplitude=1.25)
            -> Disable WorkflowOutput

            Annotation "Enable for testing without nidaq"(Text="")
            -> Timer(DueTime=PT10.6S)
            -> WorkflowOutput

            WorkflowInput Source1 => #6
            Annotation "LogState Blink for Ramp"(Text="") => #7
            #6, #7 -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink) => #8
            SubscribeSubject PenaltyThreshold => #9
            ExternalizedMapping(Lower(DisplayName=StimQuietPeriodLower), Upper(DisplayName=StimQuietPeriodUpper))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=1, Upper=1)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #14
            ExternalizedMapping(Lower(DisplayName=StimExtensionLower, Category="ITI Extension"), Upper(DisplayName=StimExtensionUpper, Category="ITI Extension"))
            -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=2)
            -> Bonsai.Numerics.Distributions.Sample
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(ItiExtension) => #19
            #9, #14, #19 -> GroupWorkflow DummyInitialValue => #20
                Disable DoubleProperty(Value=0)
                -> Disable First => #1
                -> Disable BooleanProperty(Value=true) => #2
                Disable WorkflowInput Source1 => #3
                -> Disable BooleanProperty(Value=true) => #4
                #2, #4 -> Disable Concat => #5
                Disable ExternalizedMapping(DueTime) => #6
                #5, #6 -> Disable Throttle(DueTime=PT2S) => #7
                #3 -> Disable BooleanProperty(Value=false) => #8
                #1 -> Disable BooleanProperty(Value=false) => #9
                #7, #8, #9 -> Disable Merge
                -> Disable WorkflowOutput

                ExternalizedMapping(DueTime)
                -> Timer(DueTime=PT1S)
                -> BooleanProperty(Value=true) => #14
                WorkflowInput Source1
                -> BooleanProperty(Value=false) => #16
                #14, #16 -> Merge
                -> Take(Count=1) => #18
                ExternalizedMapping(DueTime(DisplayName=ItiExtension))
                -> Timer(DueTime=PT2S)
                -> BooleanProperty(Value=false) => #21
                #18, #21 -> Concat
                -> Repeat
                -> Condition ReadyToGo
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1)
                -> WorkflowOutput
            ExternalizedMapping(DueTime(DisplayName=TimeToS1Quiet)) => #21
            #20, #21 -> DelaySubscription(DueTime=PT4S) => #22
            #8, #22 -> CombineLatest => #23
            ExternalizedMapping(DueTime(DisplayName=TimeToS1Cutoff))
            -> Timer(DueTime=PT8S) => #25
            #23, #25 -> TakeUntil
            -> Condition ReadyToGo
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Take(Count=1) => #28
            Annotation "LogState Reponse is for S1"(Text="") => #29
            #28, #29 -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Response)
            -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
            -> MulticastSubject Commands

            Disable GroupWorkflow "Optional fix for 5ms pulse"
                SubscribeSubject Timestamp
                -> GroupWorkflow TimeSinceStart => #1
                    WorkflowInput Source1 => #0
                    -> Take(Count=1) => #1
                    #0, #1 -> CombineLatest
                    -> Subtract
                    -> WorkflowOutput
                ExternalizedMapping("WaitTime (s)") => #2
                #1, #2 -> Condition WaitTime
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName="WaitTime (s)")) => #1
                    #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=0.005))
                    -> WorkflowOutput
                -> Take(Count=1)
                -> BooleanProperty(Value=true)
                -> Disable WorkflowOutput
                -> WorkflowOutput

            Disable SelectMany Move => #34
                SubscribeSubject PullThreshold
                -> IntProperty(Value=0)
                -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #2
                ExternalizedMapping(DueTime) => #3
                #2, #3 -> Delay(DueTime=PT0S) => #4
                SubscribeSubject Threshold
                -> IntProperty(Value=1) => #6
                #6, #2 -> TakeUntil => #7
                ExternalizedMapping(DueTime(DisplayName="Go Response Window (s)"))
                -> Timer(DueTime=PT1S)
                -> IntProperty(Value=2) => #10
                #10, #2 -> TakeUntil => #11
                #4, #7, #11 -> Merge
                -> First
                -> WorkflowOutput
            -> Disable Condition Hit => #35
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            Disable ExternalizedMapping("Pulse Period(ms)"(Category="Solenoid Properties")) => #36
            #35, #36 -> Disable GroupWorkflow A => #37
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
                #0, #1 -> IntProperty(Value=80)
                -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
                -> MulticastSubject Commands
                -> WorkflowOutput
            Disable ExternalizedMapping(SoundIndex(DisplayName=RewardTone, Category="Tone Properties")) => #38
            #37, #38 -> Disable IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
            -> Disable TrialResponse(Response=Hit)
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Hit) => #41
            #34 -> Disable Condition Miss
                WorkflowInput Source1
                -> Equal(Operand=IntProperty(Value=2))
                -> WorkflowOutput
            -> Disable TrialResponse(Response=Miss)
            -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Miss) => #44
            #41, #44 -> Disable Merge
        #56, #58 -> Zip
        -> MemberSelector(Selector=Item1) => #60
        #33 -> Condition NoGoTrial
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> AsyncSubject NoGo
        -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\SetOutput.bonsai, Mask=Digital1) => #64
        ExternalizedMapping(NoGoSound(Category="Tone Properties")) => #65
        #64, #65 -> SelectMany StimulusPresentation
            SubscribeSubject Threshold
            -> TrialResponse(Response=EarlyResponse)
            -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=EarlyResponse)
            -> BooleanProperty(Value=false) => #3
            ExternalizedMapping(SoundIndex(DisplayName=NoGoSound)) => #4
            WorkflowInput Source1
            -> PublishSubject LaserOn => #6
            #4, #6 -> Disable IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=12)
            -> Disable MulticastSubject AllToneTick
            -> Disable Delay(DueTime=PT0.1S)
            -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
            -> Disable MulticastSubject Commands => #11
            ExternalizedMapping(DueTime) => #12
            #11, #12 -> Delay(DueTime=PT0S)
            -> BooleanProperty(Value=true) => #14
            #3, #14 -> Merge
            -> First
            -> WorkflowOutput
        -> Disable Condition CompletedStimulus
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=NoGo)
        -> Disable IncludeWorkflow(Path=Extensions\ClearOutput.bonsai, Mask=Digital1) => #69
        ExternalizedMapping("NoGo Response Window (s)"(Category="Response Window Settings")) => #70
        #69, #70 -> SelectMany DontMove => #71
            SubscribeSubject NoGoThreshold
            -> DistinctUntilChanged
            -> PropertySource<StateTransition,StateId>(MemberName=Id, Value=Joystick)
            -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> BooleanProperty(Value=false) => #4
            ExternalizedMapping(DueTime(DisplayName="NoGo Response Window (s)"))
            -> Timer(DueTime=PT1S)
            -> BooleanProperty(Value=true) => #7
            #4, #7 -> Merge
            -> First
            -> WorkflowOutput
        -> Condition CorrectRejection
            WorkflowInput Source1
            -> WorkflowOutput
        -> TrialResponse(Response=CorrectRejection)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=CorrectRejection) => #74
        #71 -> Condition FalseAlarm => #75
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        ExternalizedMapping(SoundIndex(DisplayName=MissTone, Category="Tone Properties")) => #76
        #75, #76 -> Disable IncludeWorkflow(Path=Extensions\PlaySound.bonsai, SoundIndex=50)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Timeout) => #78
        ExternalizedMapping(DueTime(DisplayName="Timeout Duration", Category="Timeout Properties")) => #79
        #78, #79 -> SelectMany FalseAlarmPenalty
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0S)
            -> WorkflowOutput
        -> TrialResponse(Response=FalseAlarm)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=FalseAlarm) => #82
        #44 -> Condition PullPenalty
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> TrialResponse(Response=PullPenalty)
        -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=PullPenalty) => #85
        #60, #74, #82, #85 -> Merge
        -> FirstOrDefault
        -> WorkflowOutput

        SubscribeSubject Joystick => #89
        SubscribeSubject NoGo => #90
        #89, #90 -> SubscribeWhen => #91
        -> Take(Count=1) => #92
        #91, #92 -> CombineLatest
        -> Subtract
        -> Bonsai.Numerics.Abs => #95
        ExternalizedMapping(Value(DisplayName="NoGo Threshold")) => #96
        #95, #96 -> GreaterThan(Operand=DoubleProperty(Value=0.012))
        -> Condition Movement
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject NoGoThreshold
    Disable SubscribeSubject StartTrigger => #23
    #22, #23 -> Disable SubscribeWhen => #24
    ExternalizedMapping(Count(DisplayName="Number of Trials", Category="Experiment Control")) => #25
    #24, #25 -> Take(Count=6)
    -> Concat
    -> MulticastSubject PreviousResponse
    -> PublishSubject ResponseStatistics => #29
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/ResponseStat.csv))
    -> PropertyMapping(FileName) => #32
    #29, #32 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/For_Shawn/gtACR2_Ramp_Data_For_Shawn_2025-08-13T16-07-28/ResponseStat.csv"
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true
    -> Disable LastOrDefault
    -> Disable Delay(DueTime=PT1S)
    -> WorkflowOutput

    SubscribeSubject State
    -> IncludeWorkflow Timestamp(Path=Extensions\WithLatestTimestamp.bonsai)
    -> InputMapping(Id(Selector=Value), ElapsedTime(Selector=Timestamp)) => #39
    SubscribeSubject Trial
    -> PropertyMapping(Trial) => #41
    Source1=#39, Source1=#41 -> StateTransition(Trial=5, Id=Response, ElapsedTime=6163579.087008) => #42
    -> SampleState
    -> StateStatistics
    -> PublishSubject TrialStatistics
    #42 -> DistinctUntilStateChanged => #46
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #48
    Source1=#46, Source3=#48 -> Zip => #49
    SubscribeSubject Path
    -> Add(Operand=StringProperty(Value=/GoTone_StateTransitions.csv))
    -> PropertyMapping(FileName) => #52
    #49, #52 -> Bonsai.IO.CsvWriter
      FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/For_Shawn/gtACR2_Ramp_Data_For_Shawn_2025-08-13T16-07-28/GoTone_StateTransitions.csv"
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=true

    SubscribeSubject Threshold
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Joystick)

    SubscribeSubject Lick
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Lick)

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=100)
    -> AsyncSubject TrialDistribution

    PropertySource<TrialResponse,ResponseId>(MemberName=Result, Value=Hit)
    -> BehaviorSubject PreviousResponse

    Disable SubscribeSubject Sounds
    -> Disable Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=U16, IsArray=false)) => #64
    Disable SubscribeSubject Path
    -> Disable Add(Operand=StringProperty(Value=/sounds.csv))
    -> Disable PropertyMapping(FileName) => #67
    #64, #67 -> Disable Bonsai.IO.CsvWriter
      FileName=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2024-09-18T16-40-04/sounds.csv
      Append=false
      Overwrite=false
      Suffix=None
      IncludeHeader=false

    Disable IncludeWorkflow(Path=Extensions\SoftSoundCard.bonsai)
    Disable IncludeWorkflow(Path=Extensions\ManualCamera.bonsai)
    Disable IncludeWorkflow(Path=Extensions\HarpCamera.bonsai)

    PropertySource<StateTransition,StateId>(MemberName=Id, Value=Annotation)
    -> IgnoreElements
    -> BehaviorSubject Annotation

    SubscribeSubject Joystick => #75
    ExternalizedMapping(Value(DisplayName="ITI Lower Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=-0.02)
    -> BehaviorSubject ITILower => #78
    #75, #78 -> CombineLatest
    -> LessThan => #80
    ExternalizedMapping(Value(DisplayName="ITI Upper Threshold", Category="Joystick Parameters"))
    -> FloatProperty(Value=0.012)
    -> BehaviorSubject ITIUpper => #83
    #75, #83 -> CombineLatest
    -> GreaterThan => #85
    #80, #85 -> Zip
    -> LogicalOr
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PenaltyThreshold

    SubscribeSubject Joystick => #90
    ExternalizedMapping(Value(DisplayName="Pull Threshold", Category="Joystick Parameters")) => #91
    #90, #91 -> LessThan(Operand=DoubleProperty(Value=-0.02))
    -> Condition Movement
        WorkflowInput Source1
        -> WorkflowOutput
    -> PublishSubject PullThreshold

    Disable Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=1, Upper=100)
    -> Disable Bonsai.Numerics.Distributions.Sample
    -> Disable GreaterThan(Operand=IntProperty(Value=0))
    -> Disable Condition => #98
        WorkflowInput Source1
        -> WorkflowOutput
    Disable ExternalizedMapping(Lower(DisplayName=BlinkingLower), Upper(DisplayName=BlinkingUpper))
    -> Disable Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=2, Upper=4)
    -> Disable Bonsai.Numerics.Distributions.Sample
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> Disable PropertyMapping(DueTime) => #103
    #98, #103 -> Disable Delay(DueTime=PT3.691S)
    -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
    -> Disable MulticastSubject Commands
    -> Disable IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)
    -> Disable Repeat

    ExternalizedMapping(PortName(DisplayName="Behavior COMPort", Category="Experiment Control"))
    -> GroupWorkflow HarpJoystick
        SubscribeSubject Commands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM3) => #2
        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
        -> PublishSubject Timestamp
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=QuadratureCounter, Mask=Port2)
        -> PublishSubject Touch
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=AnalogInput, Mask=Port1)
        -> PublishSubject Joystick
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=Input, Mask=Poke1InfraRedBeam)
        -> PublishSubject Reward
        #2 -> Bonsai.Harp.CF.BehaviorEvent(Type=RegisterInputs, Mask=Port1)
        -> PublishSubject StartTrigger
        #2 -> MemberSelector(Selector=MessageBytes) => #13
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/Joystick.bin))
        -> PropertyMapping(Path) => #16
        #13, #16 -> Bonsai.Dsp.MatrixWriter
          Path="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/For_Shawn/gtACR2_Ramp_Data_For_Shawn_2025-08-13T16-07-28/Joystick.bin"
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor
        #2 -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
        -> Harp.Behavior.FilterRegister(FilterType=Include, Register=Harp.Behavior.AnalogData)
        -> PublishSubject Clock

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Commands

        SubscribeSubject Touch
        -> Bonsai.Numerics.Abs
        -> GreaterThan(Operand=DoubleProperty(Value=0.015))
        -> DistinctUntilChanged
        -> Condition TouchDetect
            WorkflowInput Source1
            -> WorkflowOutput
        -> IncludeWorkflow Timestamp(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
        -> PublishSubject Lick

    Disable ExternalizedMapping(PortName(DisplayName="Soundcard COMPort", Category="Experiment Control"))
    -> Disable GroupWorkflow HarpSoundCard
        SubscribeSubject Sounds => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM4)
        -> MemberSelector(Selector=MessageBytes) => #3
        SubscribeSubject Path
        -> Add(Operand=StringProperty(Value=/soundcard.bin))
        -> PropertyMapping(Path) => #6
        #3, #6 -> Bonsai.Dsp.MatrixWriter
          Path=C:\Users\SippylabJan\Desktop\BehaviorData/Shriya/LickTask/SP001_LickTask_2024-09-18T16-40-04/soundcard.bin
          Suffix=None
          Overwrite=false
          Layout=ColumnMajor

        Bonsai.Harp.CreateHarpMessage(MessageType=Write, Address=32, PayloadType=U8, Payload=0)
        -> IgnoreElements
        -> BehaviorSubject Sounds

    BehaviorSubject<Bonsai.Harp.HarpMessage> AllToneTick
    Disable IncludeWorkflow(Path=Extensions\SoftJoystick.bonsai)

    Bonsai.Windows.Input.KeyDown(Filter="LButton A Shift", SuppressRepetitions=false)
    -> GroupWorkflow PulseValve
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName="Pulse Period(ms)")) => #1
        #0, #1 -> IntProperty(Value=100)
        -> Bonsai.Harp.CF.BehaviorCommand(Type=PulsePeriod, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Poke0Valve)
        -> MulticastSubject Commands
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Annotation)

SubscribeSubject TrialStatistics

GroupWorkflow ResponseStatistics
    SubscribeSubject ResponseStatistics => #0
    ExternalizedMapping(Count) => #1
    #0, #1 -> BufferCount(Count=20, Skip=1) => #2
    #0, #1 -> Take(Count=20)
    -> IncrementalBuffer => #4
    #2, #4 -> Merge
    -> Visualizer "Response Stat"
        WorkflowInput Source1
        -> ResponseStatistics
        -> WorkflowOutput
    -> WorkflowOutput

Disable GroupWorkflow CameraVisualizer
    SubscribeSubject Camera => #0
    ExternalizedMapping(Value(DisplayName=VisualizerFramerate))
    -> FloatProperty(Value=20)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(1/it)
    -> PropertyMapping(Interval) => #4
    #0, #4 -> GateInterval(Interval=PT0.05S)
    -> WorkflowOutput

GroupWorkflow JoystickVisualizer
    SubscribeSubject Joystick
    -> GroupWorkflow Downsampling
        WorkflowInput Source1 => #0
        ExternalizedMapping(Factor) => #1
        #0, #1 -> GroupWorkflow Buffer => #2
            WorkflowInput Source1 => #0
            ExternalizedMapping(Count(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal.")) => #1
            #0, #1 -> Bonsai.Dsp.Buffer(Count=20, Skip=nil)
            -> WorkflowOutput
        #1 -> GroupWorkflow KernelLength
            ExternalizedMapping(Value(DisplayName=Factor, Description="The integral factor by which to divide the sampling rate of the input signal."))
            -> PropertySource<Bonsai.Dsp.Decimate,System.Int32>(MemberName=KernelLength, Value=20)
            -> Divide(Operand=IntProperty(Value=2))
            -> WorkflowOutput
        -> PropertyMapping(KernelLength) => #4
        #2, #1, #4 -> Bonsai.Dsp.Decimate(Downsampling=LowPass, BufferLength=1, Factor=20, SampleRate=1000, KernelLength=10)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Val0)
        -> WorkflowOutput
    -> GroupWorkflow "TrialGraph - Time (sec)"
        WorkflowInput Source1
        -> Visualizer TrialGraph
            WorkflowInput Source1
            -> GroupWorkflow WithTrialTimestamp
                WorkflowInput Source1 => #0
                ExternalizedMapping(Name)
                -> SubscribeSubject Timestamp => #2
                -> Take(Count=1) => #3
                #2, #3 -> CombineLatest
                -> Subtract => #5
                #0, #5 -> WithLatestFrom => #6
                SubscribeSubject JoystickThreshold => #7
                SubscribeSubject ITIUpper => #8
                SubscribeSubject ITILower => #9
                DoubleProperty(Value=0)
                -> First => #11
                SubscribeSubject ToneTick => #12
                SubscribeSubject JoystickThreshold
                -> PropertyMapping(Value) => #14
                #12, #14 -> DoubleProperty(Value=0.012000000104308128)
                -> First => #16
                #11, #16 -> Concat
                -> Repeat => #18
                #6, #7, #8, #9, #18 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.Item2 as Timestamp,
                    Item1.Item1 as Value,
                    Item2 as Threshold,
                    Item3 as ITIUpper,
                    Item4 as ITILower,
                    Item5 as NoGoToneTick)
                -> WorkflowOutput

                SubscribeSubject AllToneTick
                -> PublishSubject ToneTick
            -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Timestamp, ValueSelector="Value,Threshold,ITIUpper,ITILower,NoGoToneTick", SymbolType=None, LineWidth=1, Capacity=1000, Min=nil, Max=nil)
            -> WorkflowOutput
        -> WorkflowOutput
    -> WorkflowOutput

ExternalizedMapping(Index(DisplayName="Camera Index", Category="Camera Settings"))
-> Disable Bonsai.Vision.CameraCapture(Index=0, CaptureProperties="") => #6
ExternalizedMapping(FileName(DisplayName="Video File Name", Category="Camera Settings")) => #7
#6, #7 -> Disable Bonsai.Vision.VideoWriter
  FileName=RawVideo
  Suffix=Timestamp
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=30
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor

SubscribeSubject Joystick => #9
-> Visualizer
    WorkflowInput Source1
    -> WorkflowOutput
SubscribeSubject Timestamp => #11
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #13
Source1=#11, Source3=#13 -> Zip => #14
#14, #9 -> CombineLatest => #15
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/JoystickTrace.csv))
-> PropertyMapping(FileName) => #18
#15, #18 -> Bonsai.IO.CsvWriter
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/For_Shawn/gtACR2_Ramp_Data_For_Shawn_2025-08-13T16-07-28/JoystickTrace.csv"
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable Neurophotometrics.V2.FP3002
  AcquisitionMode=StartPhotometry
  PortName=COMx
  Regions
    PhotometryRegion(Index=0, Channel=Red, Rectangle(Location(X=248, Y=461), Size(Width=72, Height=74), X=248, Y=461, Width=72, Height=74), Name=R0)
    PhotometryRegion(Index=1, Channel=Red, Rectangle(Location(X=305, Y=534), Size(Width=70, Height=70), X=305, Y=534, Width=70, Height=70), Name=R1)
-> Disable Neurophotometrics.V2.PhotometryData(VisualizerSettings(PlotSettings="", Capacity=1000)) => #21
-> Disable Timestamp => #22
-> Disable MemberSelector(Selector=Value.FrameCounter) => #23
#22 -> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #24
#23, #24 -> Disable Zip => #25
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/Frames.csv))
-> Disable PropertyMapping(FileName) => #28
#25, #28 -> Disable Bonsai.IO.CsvWriter
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/ToDelete/TestRamp_ToDelete_2025-08-13T15-11-10/Frames.csv"
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/Photometry_.csv))
-> Disable PropertyMapping(FileName) => #32
#21, #32 -> Disable Neurophotometrics.V2.PhotometryWriter
  IncludeRegions=false
  IncludePlots=false
  IncludeVideo=false
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/ToDelete/TestRamp_ToDelete_2025-08-13T15-11-10/Photometry_.csv"
  Suffix=None

ExternalizedMapping(Value(DisplayName=DataPath, Category="Experiment Control"))
-> PropertySource<Bonsai.IO.EnumerateFiles,System.String>(MemberName=Path, Value="C:\Users\Sippylab\Desktop\Behavior Data") => #35
ExternalizedMapping(Value(DisplayName=ExperimenterId, Category="Experiment Control"))
-> StringProperty(Value=Celeste) => #37
ExternalizedMapping(Value(DisplayName=SubjectId, Category="Experiment Control"))
-> StringProperty(Value=gtACR2_Ramp_Data) => #39
ExternalizedMapping(Value(DisplayName=ExperimentName, Category="Experiment Control"))
-> StringProperty(Value=For_Shawn) => #41
#35, #37, #39, #41 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as DataPath,
    Item2 as ExperimenterId,
    Item3 as SubjectId,
    Item4 as ExperimentName)
-> Timestamp
-> GroupWorkflow SessionMetadata
    WorkflowInput Source1
    -> BehaviorSubject SessionManualInfo
    -> Format(Format={0}/{1}/{3}/{2}_{3}_{4:yyyy-MM-ddTHH-mm-ss}, Selector="Value.DataPath,Value.ExperimenterId,Value.SubjectId,Value.ExperimentName,Timestamp")
    -> BehaviorSubject Path

    SubscribeSubject Path => #4
    SubscribeSubject SessionManualInfo => #5
    #4, #5 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as Path,
        Item2 as Metadata)
    -> BehaviorSubject SessionMetadata

SubscribeSubject Timestamp => #46
-> Timestamp
-> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #48
Source1=#46, Source3=#48 -> Zip => #49
SubscribeSubject Touch => #50
#49, #50 -> CombineLatest => #51
SubscribeSubject Path
-> Add(Operand=StringProperty(Value=/LickTrace.csv))
-> PropertyMapping(FileName) => #54
#51, #54 -> Bonsai.IO.CsvWriter
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/For_Shawn/gtACR2_Ramp_Data_For_Shawn_2025-08-13T16-07-28/LickTrace.csv"
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false

Disable Bonsai.DAQmx.AnalogInput => #56
  SignalSource=""
  SampleRate=20000
  ActiveEdge=Rising
  SampleMode=ContinuousSamples
  BufferSize=2000
  SamplesPerChannel=nil
  Channels
    AnalogInputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai5, TerminalConfiguration=Differential, VoltageUnits=Volts)
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/Photometry.bin))
-> Disable PropertyMapping(Path) => #59
#56, #59 -> Disable Bonsai.Dsp.MatrixWriter(Suffix=None, Overwrite=false, Layout=ColumnMajor)

SubscribeSubject StartTrigger
-> IncludeWorkflow(Path=Extensions\LogState.bonsai, Id=Blink)

Disable Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=20087890, ColorProcessing=Default)
-> Disable MemberSelector(Selector=Image)
-> Disable Bonsai.Video.VideoCaptureDevice => #65
  Index=0
  Format(FrameSize(Width=800, Height=600), AverageFrameRate=60, MaximumFrameRate=60, BitCount=24)
  CaptureProperties(CameraProperty(Property=Exposure, Value=-5, ControlFlags=Auto), CameraProperty(Property=Focus, Value=0, ControlFlags=Auto))
-> Disable Timestamp
-> Disable MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #67
#65, #67 -> Disable Zip => #68
Disable SubscribeSubject Path
-> Disable Add(Operand=StringProperty(Value=/VideoTimestamps.csv))
-> Disable PropertyMapping(FileName) => #71
#68, #71 -> Disable Bonsai.IO.CsvWriter
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/ToDelete/TestRamp_ToDelete_2025-08-13T15-11-18/VideoTimestamps.csv"
  Append=false
  Overwrite=false
  Suffix=None
  IncludeHeader=false
Disable SubscribeSubject SessionMetadata
-> Disable Format(Format={0}\{1}_{2}_{3:yyyy-MM-ddTHH-mm-ss}.avi, Selector="Path,Metadata.Value.SubjectId,Metadata.Value.ExperimentName,Metadata.Timestamp")
-> Disable PropertyMapping(FileName) => #75
#65, #75 -> Disable Bonsai.Vision.VideoWriter
  FileName="C:\Users\Sippylab\Desktop\Behavior Data/Celeste/ToDelete/TestRamp_ToDelete_2025-08-13T15-11-18\TestRamp_ToDelete_2025-08-13T15-11-18.avi"
  Suffix=None
  Buffered=true
  Overwrite=false
  FourCC=FMP4
  FrameRate=60
  FrameSize(Width=0, Height=0)
  ResizeInterpolation=NearestNeighbor
#65 -> Disable Bonsai.Harp.CF.BehaviorCommand(Type=SetOutput, Mask=Digital2)
-> Disable MulticastSubject Commands
